OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#0.Experiment information, Signal=#0.Signal strea, Stimulation=#0.Stimulations -> 0xc67a01dc GDF file writer
  Filename = D:/gijs_raw.gdf
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations -> Identity => #2
#2.Output stream 2 -> Channel Selector 1
  Channel List = CH_Event
  Action = Select
  Channel Matching Method = Smart
-> Parallel Port to Stimulation => #4
  Conversion list location: = C:/WORK/OpenVibe_latest/dist/share/openvibe-scenarios/bi_new_scenarios/Conversions1.txt
  Policy: = 1
#2.Output stream 2 -> Channel Selector 2 => #5
  Channel List = CH_Event
  Action = Reject
  Channel Matching Method = Smart
Input stream 1=#2.Output stream 1, Input stream 2=#5, Input stream 3=#4.Output stimulations 1, Input stream 4=#4.Output stimulations 2 -> Generic stream writer
  Filename = D:/gijs-new.ov
  Use compression = true

Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Feedback_Continuous
  Button 1 OFF = OVTK_GDF_End_Of_Trial

Analog VRPN Server
  Peripheral name = openvibe-vrpn
