OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  Finally, the Voting Classifier
  box choses which of the candidate
  column/ row has the P300

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> 0xc67a01dc Channel Selector 1
  Channel List = CH_Event
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDawn Spatial Filter => #5
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = D:/p300-spatial-filter.cfg
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3, Input stream 4=#1.Output stream 4 -> Generic stream writer
  Filename = D:/gijs_online_record.ov
  Use compression = true
#1.Output stream 2 -> Channel Selector 1
  Channel List = CH_Event
  Action = Select
  Channel Matching Method = Smart
-> Parallel Port to Stimulation - flashes => #8
  Conversion list location: = C:/WORK/OpenVibe_latest/dist/share/openvibe-scenarios/bi_new_scenarios/Conversions1.txt
  Policy: = 1
#8.Output stimulations 2 -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_1F
-> Identity => #10
Input stream 1=#5, Input stream 2=#8.Output stimulations 1 -> Identity => #11
  0xac367a9c = 6
Input stream 1=#11.Output stream 1, Input stream 2=#11.Output stream 2 -> Identity => #12
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Signal=#13.Epoched signal -> Signal display 01
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#13.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #17
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #18
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Signal=#18.Epoched signal -> Signal display 02
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#18.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #22
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #23
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
Signal=#23.Epoched signal -> Signal display 03
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#23.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #27
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
Signal=#28.Epoched signal -> Signal display 04
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#28.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #32
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #33
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
Signal=#33.Epoched signal -> Signal display 05
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#33.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #37
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#12.Output stream 1, Input stimulations=#12.Output stream 2 -> Stimulation based epoching => #38
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
Signal=#38.Epoched signal -> Signal display 06
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#38.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #42
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#17.Classification state, Input stream 2=#22.Classification state, Input stream 3=#27.Classification state, Input stream 4=#32.Classification state, Input stream 5=#37.Classification state, Input stream 6=#42.Classification state -> Identity => #43
  0xac367a9c = 6
Classification result 0=#43.Output stream 1, Classification result 1=#43.Output stream 2, Classification result 2=#43.Output stream 3, Classification result 3=#43.Output stream 4, Classification result 4=#43.Output stream 5, Classification result 5=#43.Output stream 6 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Input Signal 1=#43.Output stream 1, Input Signal 2=#43.Output stream 2, Input Signal 3=#43.Output stream 3, Input Signal 4=#43.Output stream 4, Input Signal 5=#43.Output stream 5, Input Signal 6=#43.Output stream 6 -> Streamed Matrix Merger => #45
  Merging dimension = 0
Input stream 1=#11.Output stream 1, Input stream 2=#11.Output stream 2 -> Identity => #46
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #47
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
Signal=#47.Epoched signal -> Signal display 07
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#47.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #51
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #52
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
Signal=#52.Epoched signal -> Signal display 08
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#52.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #56
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #57
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
Signal=#57.Epoched signal -> Signal display 09
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#57.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #61
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #62
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
Signal=#62.Epoched signal -> Signal display 10
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#62.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #66
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #67
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
Signal=#67.Epoched signal -> Signal display 11
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#67.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #71
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#46.Output stream 1, Input stimulations=#46.Output stream 2 -> Stimulation based epoching => #72
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
Signal=#72.Epoched signal -> Signal display 12
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#72.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #76
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = D:/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Classification Label Row1=#17.Labels, Classification Label Row2=#22.Labels, Classification Label Row3=#27.Labels, Classification Label Row4=#32.Labels, Classification Label Row5=#37.Labels, Classification Label Row6=#42.Labels, Classification Label Column1=#51.Labels, Classification Label Column2=#56.Labels, Classification Label Column3=#61.Labels, Classification Label Column4=#66.Labels, Classification Label Column5=#71.Labels, Classification Label Column6=#76.Labels, Targets=#10 -> Classifier qualifier
Input stream 1=#51.Classification state, Input stream 2=#56.Classification state, Input stream 3=#61.Classification state, Input stream 4=#66.Classification state, Input stream 5=#71.Classification state, Input stream 6=#76.Classification state -> Identity => #78
Input Signal 1=#78.Output stream 1, Input Signal 2=#78.Output stream 2, Input Signal 3=#78.Output stream 3, Input Signal 4=#78.Output stream 4, Input Signal 5=#78.Output stream 5, Input Signal 6=#78.Output stream 6 -> Streamed Matrix Merger => #79
  Merging dimension = 0
Input Signal 1=#45, Input Signal 2=#79 -> Streamed Matrix Merger
  Merging dimension = 0
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Classification result 0=#78.Output stream 1, Classification result 1=#78.Output stream 2, Classification result 2=#78.Output stream 3, Classification result 3=#78.Output stream 4, Classification result 4=#78.Output stream 5, Classification result 5=#78.Output stream 6 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true

Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_0B
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_0C
  Button 2 OFF = OVTK_StimulationId_Label_00
  Button 3 ON = OVTK_StimulationId_Label_0D
  Button 3 OFF = OVTK_StimulationId_Label_00
  Button 4 ON = OVTK_StimulationId_Label_0E
  Button 4 OFF = OVTK_StimulationId_Label_00
