OpenViBE-Scenario

Generic stream reader => #0
  Filename = D:/gijs-new.ov
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #1
#1.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDawn Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = D:/p300-spatial-filter.cfg
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#1.Output stream 3, Target stimulations=#1.Output stream 4 -> P300 Speller Visualisation => #6
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller-xDAWN/p300-speller-visualisation.cfg
Input signal=#5, Input stimulations=#6 -> Stimulation based epoching "Target Selection" => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Signal=#7.Epoched signal -> Signal display "Target Response"
  Time Scale = 0.600000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator => #10
Input signal=#5, Input stimulations=#6 -> Stimulation based epoching "Non Target Selection" => #11
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#11.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = D:/p300-epoch-average.cfg
-> Feature aggregator => #13
Stimulations=#1.Output stream 3, Features for class 1=#10, Features for class 2=#13 -> Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = D:/p300-classifier.cfg
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 20
