OpenViBE-Scenario

0xc67a01dc GDF file reader => #0
  Filename = D:/record-[2012.06.14-17.28.43].gdf
  Samples per buffer = 32
Input stream 1=#0.Experiment information, Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Selector 1 => #2
  Channel List = CH_Event
  Action = Select
  Channel Matching Method = Smart
-> Parallel Port to Stimulation => #3
  Conversion list location: = C:/WORK/OpenVibe_latest/dist/share/openvibe-scenarios/bi_new_scenarios/Conversions1.txt
  Policy: = 1
Signal=#2, Stimulations=#3.Output stimulations 1 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1.Output stream 2 -> Channel Selector 2 => #5
  Channel List = CH_Event
  Action = Reject
  Channel Matching Method = Smart
Input stream 1=#1.Output stream 1, Input stream 2=#5, Input stream 3=#3.Output stimulations 1, Input stream 4=#3.Output stimulations 2 -> Generic stream writer
  Filename = D:/gijs-new.ov
  Use compression = true
