OpenViBE-Scenario

GDF file reader => #0
  Filename = D:/record-[2012.06.14-17.28.43].gdf
  Samples per buffer = 32
Input stream 1=#0.Experiment information, Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 3 -> 0xc67a01dc Stimulation Transformer => #2
  Transformation file list location: = C:/Documents and Settings/Anton/Mes documents/Dropbox/BrainInvaders/bi-protocols/software-tagging-brain-invaders/scenarios/Transformations.txt
Signal=#1.Output stream 2, Stimulations=#2.Output stimulations 1 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1.Output stream 2 -> Channel Selector 2 => #4
  Channel List = CH_Event
  Action = Reject
  Channel Matching Method = Smart
Input stream 1=#1.Output stream 1, Input stream 2=#4, Input stream 3=#2.Output stimulations 1, Input stream 4=#2.Output stimulations 2 -> Generic stream writer
  Filename = D:/gijs-new.ov
  Use compression = true
