OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/WORK/ressources/sourceEEG/BI/20110405_Nicolas/training/record-[2011.04.05-14.15.41]-acquisition.ov
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #1
#1.Output stream 2 -> Channel Selector 2
  Channel List = CH_Trigger;CH_Event;Bio1;CH_Bit_1;CH_Bit_2
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
#1.Output stream 2 -> Channel Selector 3
  Channel List = CH_Trigger
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x==64
-> Signal to Stimulation
  Stimulation for rising edge = OVTK_StimulationId_Label_1A
  Stimulation for downward edge = OVTK_StimulationId_Label_1B
-> stimulation time artefact filter => #9
  minimum time of duration (s) = 0.004
  Stimulation type of start = OVTK_StimulationId_Label_1A
  Stimulation type of end = OVTK_StimulationId_Label_1B
#1.Output stream 2 -> Channel Selector 4
  Channel List = CH_Trigger
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x==128
-> Signal to Stimulation
  Stimulation for rising edge = OVTK_StimulationId_Label_1A
  Stimulation for downward edge = OVTK_StimulationId_Label_1B
-> stimulation time artefact filter => #13
  minimum time of duration (s) = 0.004
  Stimulation type of start = OVTK_StimulationId_Label_1A
  Stimulation type of end = OVTK_StimulationId_Label_1B
#1.Output stream 2 -> Channel Selector 1 => #14
  Channel List = CH_Trigger
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x==192
-> Signal to Stimulation
  Stimulation for rising edge = OVTK_StimulationId_ExperimentStart
  Stimulation for downward edge = OVTK_StimulationId_ExperimentStop
-> stimulation time artefact filter
  minimum time of duration (s) = 0.004
  Stimulation type of start = OVTK_StimulationId_Label_1A
  Stimulation type of end = OVTK_StimulationId_Label_1B
-> stimulation Filter on number => #18
  Number of Stimulation to keep = 1
  Number of Stimulation to avoid between = 0
  Number of Stimulation to avoid at begining = 0
Signal=#14 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1.Output stream 3 -> Identity => #20
Trigger channel=#9, P300 stimulations=#20 -> Recalleur P300 => #21
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_VisualStimulationStart
  Stimulation which trig for stop = OVTK_StimulationId_Label_1B
  Stimulation to trig for stop = OVTK_StimulationId_VisualStimulationStop
#1.Output stream 4 -> Identity => #22
Trigger channel=#13, P300 stimulations=#22 -> Recalleur P300 => #23
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_Label_00
  Stimulation which trig for stop = OVTK_StimulationId_Label_1F
  Stimulation to trig for stop = OVTK_StimulationId_Label_1F
Sequence stimulations=#21, Target stimulations=#23 -> P300 Speller Visualisation => #24
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller-xDAWN/p300-speller-visualisation.cfg
Input signal=#5, Input stimulations=#24 -> Stimulation based epoching "Target Selection" => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#18, Session signal=#5, Evoked potential epochs=#25.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-spatial-filter.cfg
  Filter dimension = 3
  0xac367a9c = 10
