OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Finally, the Voting Classifier
  box choses which of the candidate
  column/ row has the P300

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Generic stream reader => #1
  Filename = C:/Program Files/openvibe/bin/record-[2011.02.09-17.41.18]-StimulationsNTargetP300.ov
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1.Output stream 1, Input stream 4=#1.Output stream 2 -> Identity => #2
#2.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #5
  Spatial filter coefficients = 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1
  Number of output channels = 4
  Number of input channels = 4
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-spatial-filter.cfg
#2.Output stream 2 -> Channel selector
  Channels list = CH_Trigger
  Selection by index = false
-> Simple DSP
  Equation = x==64
-> Signal to Stimulation => #8
  Stimulation for rising edge = OVTK_StimulationId_Label_1A
  Stimulation for downward edge = OVTK_StimulationId_Label_1B
Trigger channel=#8, P300 stimulations=#2.Output stream 3 -> Recalleur P300 => #9
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_VisualStimulationStart
  Stimulation which trig for stop = OVTK_StimulationId_Label_1B
  Stimulation to trig for stop = OVTK_StimulationId_VisualStimulationStop
Input stream 1=#5, Input stream 2=#9 -> Identity => #10
  0xac367a9c = 6
Input stream 1=#10.Output stream 1, Input stream 2=#10.Output stream 2 -> Identity => #11
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#12.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #15
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #16
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#16.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #19
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#20.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #23
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #24
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#24.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #27
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#28.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #31
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#15.Classification state, Input stream 2=#19.Classification state, Input stream 3=#23.Classification state, Input stream 4=#27.Classification state, Input stream 5=#31.Classification state -> Identity => #32
Input Signal 1=#32.Output stream 1, Input Signal 2=#32.Output stream 2, Input Signal 3=#32.Output stream 3, Input Signal 4=#32.Output stream 4, Input Signal 5=#32.Output stream 5 -> Streamed Matrix Merger => #33
  Merging dimension = 0
Classification result 0=#32.Output stream 1, Classification result 1=#32.Output stream 2, Classification result 2=#32.Output stream 3, Classification result 3=#32.Output stream 4, Classification result 4=#32.Output stream 5 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#10.Output stream 1, Input stream 2=#10.Output stream 2 -> Identity => #35
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #36
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#36.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #39
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #40
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#40.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #43
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#44.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #47
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #48
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#48.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #51
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching => #52
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#52.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/P300recallSPI/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #55
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/P300recallSPI/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#39.Classification state, Input stream 2=#43.Classification state, Input stream 3=#47.Classification state, Input stream 4=#51.Classification state, Input stream 5=#55.Classification state -> Identity => #56
  0xac367a9c = 6
Classification result 0=#56.Output stream 1, Classification result 1=#56.Output stream 2, Classification result 2=#56.Output stream 3, Classification result 3=#56.Output stream 4, Classification result 4=#56.Output stream 5 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Input Signal 1=#56.Output stream 1, Input Signal 2=#56.Output stream 2, Input Signal 3=#56.Output stream 3, Input Signal 4=#56.Output stream 4, Input Signal 5=#56.Output stream 5 -> Streamed Matrix Merger => #58
  Merging dimension = 0
Input Signal 1=#58, Input Signal 2=#33 -> Streamed Matrix Merger
  Merging dimension = 0
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3, Input stream 4=#2.Output stream 4 -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = true

Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_0B
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_0C
  Button 2 OFF = OVTK_StimulationId_Label_00
  Button 3 ON = OVTK_StimulationId_Label_0D
  Button 3 OFF = OVTK_StimulationId_Label_00
  Button 4 ON = OVTK_StimulationId_Label_0E
  Button 4 OFF = OVTK_StimulationId_Label_00
