OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  Finally, the Voting Classifier
  box choses which of the candidate
  column/ row has the P300

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Generic stream reader => #1
  Filename = C:/WORK/data expe/2011 03 29 Didier/online/02/record-[2011.03.29-15.39.33]-StimulationsNTargetP300.ov
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1.Output stream 1, Input stream 4=#1.Output stream 2 -> Identity => #2
#2.Output stream 2 -> Channel Selector "select trigger"
  Channel List = CH_Trigger
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP "keep 128"
  Equation = x==128
-> Signal to Stimulation => #5
  Stimulation for rising edge = OVTK_StimulationId_Label_1A
  Stimulation for downward edge = OVTK_StimulationId_Label_1B
#2.Output stream 4 -> Identity => #6
Trigger channel=#5, P300 stimulations=#6 -> Recalleur P300
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_Label_00
  Stimulation which trig for stop = OVTK_StimulationId_Label_1F
  Stimulation to trig for stop = OVTK_StimulationId_Label_1F
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_1F
-> Identity => #9
#2.Output stream 2 -> Channel Selector "Select Signal"
  Channel List = CH_Trigger;CH_Event;Bio1;CH_Bit_1;CH_Bit_2
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDawn Spatial Filter => #13
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-spatial-filter.cfg
#2.Output stream 2 -> Channel Selector "select trigger"
  Channel List = CH_Trigger
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP "keep 64"
  Equation = x==64
-> Signal to Stimulation => #16
  Stimulation for rising edge = OVTK_StimulationId_Label_1A
  Stimulation for downward edge = OVTK_StimulationId_Label_1B
Trigger channel=#16, P300 stimulations=#2.Output stream 3 -> Recalleur P300 => #17
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_VisualStimulationStart
  Stimulation which trig for stop = OVTK_StimulationId_Label_1B
  Stimulation to trig for stop = OVTK_StimulationId_VisualStimulationStop
Input stream 1=#13, Input stream 2=#17 -> Identity => #18
  0xac367a9c = 6
Input stream 1=#18.Output stream 1, Input stream 2=#18.Output stream 2 -> Identity => #19
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Signal=#20.Epoched signal -> Signal display 01
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#20.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #24
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Signal=#25.Epoched signal -> Signal display 02
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#25.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #29
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #30
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
Signal=#30.Epoched signal -> Signal display 03
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#30.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #34
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #35
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
Signal=#35.Epoched signal -> Signal display 04
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#35.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #39
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #40
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
Signal=#40.Epoched signal -> Signal display 05
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#40.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #44
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#19.Output stream 1, Input stimulations=#19.Output stream 2 -> Stimulation based epoching => #45
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
Signal=#45.Epoched signal -> Signal display 06
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#45.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #49
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#24.Classification state, Input stream 2=#29.Classification state, Input stream 3=#34.Classification state, Input stream 4=#39.Classification state, Input stream 5=#44.Classification state, Input stream 6=#49.Classification state -> Identity => #50
  0xac367a9c = 6
Classification result 0=#50.Output stream 1, Classification result 1=#50.Output stream 2, Classification result 2=#50.Output stream 3, Classification result 3=#50.Output stream 4, Classification result 4=#50.Output stream 5, Classification result 5=#50.Output stream 6 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Input Signal 1=#50.Output stream 1, Input Signal 2=#50.Output stream 2, Input Signal 3=#50.Output stream 3, Input Signal 4=#50.Output stream 4, Input Signal 5=#50.Output stream 5, Input Signal 6=#50.Output stream 6 -> Streamed Matrix Merger => #52
  Merging dimension = 0
Input stream 1=#18.Output stream 1, Input stream 2=#18.Output stream 2 -> Identity => #53
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #54
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
Signal=#54.Epoched signal -> Signal display 07
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#54.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #58
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #59
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
Signal=#59.Epoched signal -> Signal display 08
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#59.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #63
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #64
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
Signal=#64.Epoched signal -> Signal display 09
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#64.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #68
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #69
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
Signal=#69.Epoched signal -> Signal display 10
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#69.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #73
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #74
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
Signal=#74.Epoched signal -> Signal display 11
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#74.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #78
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#53.Output stream 1, Input stimulations=#53.Output stream 2 -> Stimulation based epoching => #79
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
Signal=#79.Epoched signal -> Signal display 12
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#79.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #83
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Classification Label Row1=#24.Labels, Classification Label Row2=#29.Labels, Classification Label Row3=#34.Labels, Classification Label Row4=#39.Labels, Classification Label Row5=#44.Labels, Classification Label Row6=#49.Labels, Classification Label Column1=#58.Labels, Classification Label Column2=#63.Labels, Classification Label Column3=#68.Labels, Classification Label Column4=#73.Labels, Classification Label Column5=#78.Labels, Classification Label Column6=#83.Labels, Targets=#9 -> Classifier qualifier
Input stream 1=#58.Classification state, Input stream 2=#63.Classification state, Input stream 3=#68.Classification state, Input stream 4=#73.Classification state, Input stream 5=#78.Classification state, Input stream 6=#83.Classification state -> Identity => #85
Input Signal 1=#85.Output stream 1, Input Signal 2=#85.Output stream 2, Input Signal 3=#85.Output stream 3, Input Signal 4=#85.Output stream 4, Input Signal 5=#85.Output stream 5, Input Signal 6=#85.Output stream 6 -> Streamed Matrix Merger => #86
  Merging dimension = 0
Input Signal 1=#52, Input Signal 2=#86 -> Streamed Matrix Merger
  Merging dimension = 0
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Classification result 0=#85.Output stream 1, Classification result 1=#85.Output stream 2, Classification result 2=#85.Output stream 3, Classification result 3=#85.Output stream 4, Classification result 4=#85.Output stream 5, Classification result 5=#85.Output stream 6 -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3, Input stream 4=#2.Output stream 4 -> Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = true
Signal=#2.Output stream 2 -> Signal display "input signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100

Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_0B
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_0C
  Button 2 OFF = OVTK_StimulationId_Label_00
  Button 3 ON = OVTK_StimulationId_Label_0D
  Button 3 OFF = OVTK_StimulationId_Label_00
  Button 4 ON = OVTK_StimulationId_Label_0E
  Button 4 OFF = OVTK_StimulationId_Label_00
