OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Online Use
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Program Files/openvibe/bin/record-[2011.06.01-17.06.51].ov
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #1
#1.Output stream 2 -> Channel Selector "Select Signal"
  Channel List = CH_Trigger;CH_Event;Bio1;CH_Bit_1;CH_Bit_2
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDawn Spatial Filter => #5
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-spatial-filter.cfg
P300 stimulations=#1.Output stream 4 -> Recalleur P300 => #6
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_Label_00
  Stimulation which trig for stop = OVTK_StimulationId_Label_1F
  Stimulation to trig for stop = OVTK_StimulationId_Label_1F
P300 stimulations=#1.Output stream 3 -> Recalleur P300 => #7
  Stimulation which trig for start = OVTK_StimulationId_Label_1A
  Stimulation to trig for start = OVTK_StimulationId_VisualStimulationStart
  Stimulation which trig for stop = OVTK_StimulationId_Label_1B
  Stimulation to trig for stop = OVTK_StimulationId_VisualStimulationStop
Input stream 1=#5, Input stream 2=#7 -> Identity => #8
  0xac367a9c = 6
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
Signal=#10.Epoched signal -> Signal display 07
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#10.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #14
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
Signal=#15.Epoched signal -> Signal display 08
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#15.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #19
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #20
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
Signal=#20.Epoched signal -> Signal display 09
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#20.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #24
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
Signal=#25.Epoched signal -> Signal display 10
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#25.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #29
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #30
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
Signal=#30.Epoched signal -> Signal display 11
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#30.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #34
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #35
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
Signal=#35.Epoched signal -> Signal display 12
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#35.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #39
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#14.Classification state, Input stream 2=#19.Classification state, Input stream 3=#24.Classification state, Input stream 4=#29.Classification state, Input stream 5=#34.Classification state, Input stream 6=#39.Classification state -> Identity => #40
Input Signal 1=#40.Output stream 1, Input Signal 2=#40.Output stream 2, Input Signal 3=#40.Output stream 3, Input Signal 4=#40.Output stream 4, Input Signal 5=#40.Output stream 5, Input Signal 6=#40.Output stream 6 -> Streamed Matrix Merger => #41
  Merging dimension = 0
Classification result 0=#40.Output stream 1, Classification result 1=#40.Output stream 2, Classification result 2=#40.Output stream 3, Classification result 3=#40.Output stream 4, Classification result 4=#40.Output stream 5, Classification result 5=#40.Output stream 6 -> Voting Classifier => #42
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
  Choose one if ex-aequo = true
Input stream 1=#8.Output stream 1, Input stream 2=#8.Output stream 2 -> Identity => #43
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Signal=#44.Epoched signal -> Signal display 01
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#44.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #48
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #49
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Signal=#49.Epoched signal -> Signal display 02
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#49.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #53
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #54
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
Signal=#54.Epoched signal -> Signal display 03
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#54.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #58
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #59
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
Signal=#59.Epoched signal -> Signal display 04
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#59.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #63
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #64
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
Signal=#64.Epoched signal -> Signal display 05
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#64.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #68
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input signal=#43.Output stream 1, Input stimulations=#43.Output stream 2 -> Stimulation based epoching => #69
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
Signal=#69.Epoched signal -> Signal display 06
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#69.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #73
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WORK/OV/scenario/Brain Invaders_10/ts/p300-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
Input stream 1=#48.Classification state, Input stream 2=#53.Classification state, Input stream 3=#58.Classification state, Input stream 4=#63.Classification state, Input stream 5=#68.Classification state, Input stream 6=#73.Classification state -> Identity => #74
  0xac367a9c = 6
Classification result 0=#74.Output stream 1, Classification result 1=#74.Output stream 2, Classification result 2=#74.Output stream 3, Classification result 3=#74.Output stream 4, Classification result 4=#74.Output stream 5, Classification result 5=#74.Output stream 6 -> Voting Classifier => #75
  Number of repetitions = 1
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
Sequence stimulations=#7, Target stimulations=#6, Row selection stimulations=#75, Column selection stimulations=#42 -> P300 Speller Visualisation
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller-xDAWN/p300-speller-visualisation.cfg
Input Signal 1=#74.Output stream 1, Input Signal 2=#74.Output stream 2, Input Signal 3=#74.Output stream 3, Input Signal 4=#74.Output stream 4, Input Signal 5=#74.Output stream 5, Input Signal 6=#74.Output stream 6 -> Streamed Matrix Merger => #77
  Merging dimension = 0
Input Signal 1=#77, Input Signal 2=#41 -> Streamed Matrix Merger
  Merging dimension = 0
-> Analog VRPN server
  Peripheral name = openvibe-vrpn

Signal display "display trigger"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100

Stimulation listener
  Log level to use = Warning

Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_0B
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_0C
  Button 2 OFF = OVTK_StimulationId_Label_00
  Button 3 ON = OVTK_StimulationId_Label_0D
  Button 3 OFF = OVTK_StimulationId_Label_00
  Button 4 ON = OVTK_StimulationId_Label_0E
  Button 4 OFF = OVTK_StimulationId_Label_00
